PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = nBack_task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine descanso
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    TextComponent descanso_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Fase de descanso
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  Routine instrucciones_NB1
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    TextComponent instrucciones_NB1_txt
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        BLOQUE EXPERIMENTAL: 1-BACK

        Recuerda: ¿la letra actual coincide con la letra 1 posición atrás?

        L  →  Sí coincide
        A  →  No coincide

        Responde lo más rápido y con la mayor precisión posible.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimulo_NB1
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    TextComponent txt_letra_NB1
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letra
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  Routine respuesta_NB1
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    PolygonComponent fix_cross_NB1
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_NB1
      allowedKeys = 'a','l'
      correctAns = $tecla_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine instrucciones_NB2
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    TextComponent instrucciones_NB2_txt
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        BLOQUE EXPERIMENTAL: 2-BACK

        Recuerda: ¿la letra actual coincide con la letra 2 posiciones atrás?

        L  →  Sí coincide
        A  →  No coincide

        Responde lo más rápido y con la mayor precisión posible.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimulo_NB2
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    TextComponent txt_letra_NB2
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letra
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  Routine respuesta_NB2
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    PolygonComponent fix_cross_NB2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_NB2
      allowedKeys = 'a','l'
      correctAns = $tecla_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine instrucciones_NB3
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    TextComponent instrucciones_NB3_txt
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        BLOQUE EXPERIMENTAL: 3-BACK

        Recuerda: ¿la letra actual coincide con la letra 3 posiciones atrás?

        L  →  Sí coincide
        A  →  No coincide

        Responde lo más rápido y con la mayor precisión posible.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimulo_NB3
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    TextComponent txt_letra_NB3
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letra
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  Routine respuesta_NB3
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    PolygonComponent fix_cross_NB3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_NB3
      allowedKeys = 'a','l'
      correctAns = $tecla_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine fin_experimento
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    TextComponent fin_experimento_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        La tarea ha finalizado.

        Gracias por tu participación.
  Routine estimulo_practica_NB1
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    TextComponent txt_letra_NB1_p
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letra_p
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  Routine respuesta_practica_NB1
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    PolygonComponent fix_cross_NB1_p
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_NB1_p
      allowedKeys = 'a','l'
      correctAns = $tecla_correcta_p
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine feedback_practica_NB1
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        mensaje_feedback_NB1 = ""
        if key_resp_NB1_p.corr == 1:
            mensaje_feedback_NB1 = "¡Correcto!"
        else:
            mensaje_feedback_NB1 = "Incorrecto"
    TextComponent txt_feedback_NB1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mensaje_feedback_NB1
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  Routine instrucciones_NB1_practica
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    TextComponent instruct_practica_NB1_txt
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        PRÁCTICA 1-BACK

        ¿La letra actual es igual a la letra ANTERIOR?

        Ejemplo:   B → D → D

        El tercer trial es target porque D coincide con el trial anterior.

        L  →  Sí coincide
        A  →  No coincide

        Recibirás retroalimentación tras cada respuesta.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones_NB2_practica
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    TextComponent instruct_practica_NB2_txt
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        PRÁCTICA  2-BACK

        ¿La letra actual es igual a la letra de 2 posiciones atrás?

        Ejemplo:   B → D → B

        El tercer trial es target porque B coincide con el trial de 2 posiciones atrás.

        L  →  Sí coincide
        A  →  No coincide

        Recibirás retroalimentación tras cada respuesta.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimulo_practica_NB2
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    TextComponent txt_letra_NB2_p
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letra_p
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  Routine respuesta_practica_NB2
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    PolygonComponent fix_cross_NB2_p
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_NB2_p
      allowedKeys = 'a','l'
      correctAns = $tecla_correcta_p
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine feedback_practica_NB2
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        mensaje_feedback_NB2 = ""
        if key_resp_NB2_p.corr == 1:
            mensaje_feedback_NB2 = "¡Correcto!"
        else:
            mensaje_feedback_NB2 = "Incorrecto"
    TextComponent txt_feedback_NB2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mensaje_feedback_NB2
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  Routine instrucciones_NB3_practica
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    TextComponent instruct_practica_NB3_txt
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        PRÁCTICA 3-BACK

        ¿La letra actual es igual a la letra de 3 posiciones atrás?

        Ejemplo:   B → D → F → B

        El cuarto trial es target porque B coincide con el trial de 3 posiciones atrás.

        L  →  Sí coincide
        A  →  No coincide

        Recibirás retroalimentación tras cada respuesta.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimulo_practica_NB3
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    TextComponent txt_letra_NB3_p
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letra_p
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  Routine respuesta_practica_NB3
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    PolygonComponent fix_cross_NB3_p
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_NB3_p
      allowedKeys = 'a','l'
      correctAns = $tecla_correcta_p
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine feedback_practica_NB3
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        mensaje_feedback_NB3 = ""
        if key_resp_NB3_p.corr == 1:
            mensaje_feedback_NB3 = "¡Correcto!"
        else:
            mensaje_feedback_NB3 = "Incorrecto"
    TextComponent txt_feedback_NB3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mensaje_feedback_NB3
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  Routine fin_practica
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    TextComponent fin_practica_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        La práctica ha terminado.

        A continuación comenzará el bloque experimental.

        Ya no recibirás retroalimentación sobre tus respuestas.

        Responde lo más rápido y con la mayor precisión posible.
  Routine instrucciones
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    TextComponent instrucciones_txt
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Bienvenido/a a esta tarea.

        Verás letras aparecer una a una en pantalla.
        Tu tarea es decidir si la letra actual coincide con la letra
        que apareció N posiciones atrás en la secuencia.

        L  →  Sí coincide (target)
        A  →  No coincide (non-target)

        Responde durante la cruz que aparece después de cada letra.

        Primero realizarás práctica con cada nivel.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
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    TextComponent ITI_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instrucciones
  Routine instrucciones_NB1_practica
  LoopInitiator loop_NB1_practica loopType="TrialHandler"
    conditionsFile = conditions/practica/condiciones_practica_1back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id_p': 1, 'letra_p': 'R', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 2, 'letra_p': 'R', 'es_target_p': 1, 'tecla_correcta_p': 'l'},
      {'id_p': 3, 'letra_p': 'G', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 4, 'letra_p': 'G', 'es_target_p': 1, 'tecla_correcta_p': 'l'},
      {'id_p': 5, 'letra_p': 'H', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 6, 'letra_p': 'F', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 7, 'letra_p': 'V', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 8, 'letra_p': 'V', 'es_target_p': 1, 'tecla_correcta_p': 'l'}]
    Routine estimulo_practica_NB1
    Routine respuesta_practica_NB1
    Routine feedback_practica_NB1
  LoopTerminator loop_NB1_practica
  Routine instrucciones_NB2_practica
  LoopInitiator loop_NB2_practica loopType="TrialHandler"
    conditionsFile = conditions/practica/condiciones_practica_2back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id_p': 1, 'letra_p': 'B', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 2, 'letra_p': 'H', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 3, 'letra_p': 'K', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 4, 'letra_p': 'H', 'es_target_p': 1, 'tecla_correcta_p': 'l'},
      {'id_p': 5, 'letra_p': 'T', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 6, 'letra_p': 'H', 'es_target_p': 1, 'tecla_correcta_p': 'l'},
      {'id_p': 7, 'letra_p': 'V', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 8, 'letra_p': 'H', 'es_target_p': 1, 'tecla_correcta_p': 'l'}]
    Routine estimulo_practica_NB2
    Routine respuesta_practica_NB2
    Routine feedback_practica_NB2
  LoopTerminator loop_NB2_practica
  Routine instrucciones_NB3_practica
  LoopInitiator loop_NB3_practica loopType="TrialHandler"
    conditionsFile = conditions/practica/condiciones_practica_3back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id_p': 1, 'letra_p': 'K', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 2, 'letra_p': 'P', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 3, 'letra_p': 'P', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 4, 'letra_p': 'K', 'es_target_p': 1, 'tecla_correcta_p': 'l'},
      {'id_p': 5, 'letra_p': 'P', 'es_target_p': 1, 'tecla_correcta_p': 'l'},
      {'id_p': 6, 'letra_p': 'G', 'es_target_p': 0, 'tecla_correcta_p': 'a'},
      {'id_p': 7, 'letra_p': 'K', 'es_target_p': 1, 'tecla_correcta_p': 'l'},
      {'id_p': 8, 'letra_p': 'H', 'es_target_p': 0, 'tecla_correcta_p': 'a'}]
    Routine estimulo_practica_NB3
    Routine respuesta_practica_NB3
    Routine feedback_practica_NB3
  LoopTerminator loop_NB3_practica
  Routine fin_practica
  Routine descanso
  Routine instrucciones_NB1
  LoopInitiator loop_NB1 loopType="TrialHandler"
    conditionsFile = conditions/experimental/condiciones_experimental_1back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id': 1, 'letra': 'Q', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 2, 'letra': 'Q', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 3, 'letra': 'P', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 4, 'letra': 'G', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 5, 'letra': 'R', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 6, 'letra': 'G', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 7, 'letra': 'J', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 8, 'letra': 'J', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 9, 'letra': 'P', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 10, 'letra': 'V', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 11, 'letra': 'W', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 12, 'letra': 'W', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 13, 'letra': 'W', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 14, 'letra': 'G', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 15, 'letra': 'K', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 16, 'letra': 'K', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 17, 'letra': 'P', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 18, 'letra': 'D', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 19, 'letra': 'D', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 20, 'letra': 'J', 'es_target': 0, 'tecla_correcta': 'a'}]
    Routine estimulo_NB1
    Routine respuesta_NB1
    Routine ITI
  LoopTerminator loop_NB1
  Routine instrucciones_NB2
  LoopInitiator loop_NB2 loopType="TrialHandler"
    conditionsFile = conditions/experimental/condiciones_experimental_2back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id': 1, 'letra': 'F', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 2, 'letra': 'R', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 3, 'letra': 'M', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 4, 'letra': 'Q', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 5, 'letra': 'R', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 6, 'letra': 'B', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 7, 'letra': 'R', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 8, 'letra': 'B', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 9, 'letra': 'R', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 10, 'letra': 'V', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 11, 'letra': 'P', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 12, 'letra': 'V', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 13, 'letra': 'Q', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 14, 'letra': 'V', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 15, 'letra': 'R', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 16, 'letra': 'T', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 17, 'letra': 'P', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 18, 'letra': 'F', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 19, 'letra': 'P', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 20, 'letra': 'V', 'es_target': 0, 'tecla_correcta': 'a'}]
    Routine estimulo_NB2
    Routine respuesta_NB2
    Routine ITI
  LoopTerminator loop_NB2
  Routine instrucciones_NB3
  LoopInitiator loop_NB3 loopType="TrialHandler"
    conditionsFile = conditions/experimental/condiciones_experimental_3back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id': 1, 'letra': 'T', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 2, 'letra': 'M', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 3, 'letra': 'T', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 4, 'letra': 'R', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 5, 'letra': 'M', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 6, 'letra': 'T', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 7, 'letra': 'K', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 8, 'letra': 'P', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 9, 'letra': 'J', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 10, 'letra': 'K', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 11, 'letra': 'T', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 12, 'letra': 'D', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 13, 'letra': 'K', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 14, 'letra': 'M', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 15, 'letra': 'D', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 16, 'letra': 'D', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 17, 'letra': 'F', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 18, 'letra': 'D', 'es_target': 1, 'tecla_correcta': 'l'},
      {'id': 19, 'letra': 'H', 'es_target': 0, 'tecla_correcta': 'a'},
      {'id': 20, 'letra': 'R', 'es_target': 0, 'tecla_correcta': 'a'}]
    Routine estimulo_NB3
    Routine respuesta_NB3
    Routine ITI
  LoopTerminator loop_NB3
  Routine fin_experimento
